PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': '', 'Session': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = GoNoGoTaskCoder
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Routines
  Routine fixation
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = +
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  Routine Intro
    TextComponent IntroText
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        Press the space bar to begin
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial
    ImageComponent target
      image [set every repeat] = $cue_file
      pos [set every repeat] = (position, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      storeCorrect = True
      syncScreenRefresh = False
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  Routine End
    TextComponent EndText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        This is the end of the experiment

        Thank you for your participation!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine randomisedBreak
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = randint(2,10)
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Flow
  Routine Intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Exp1Conditions.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [OrderedDict([('cue_file', 'images/GoIcon.png'), ('is_valid', 'valid')]),
      OrderedDict([('cue_file', 'images/GoIcon.png'), ('is_valid', 'valid')]),
      OrderedDict([('cue_file', 'images/GoIcon.png'), ('is_valid', 'valid')]),
      OrderedDict([('cue_file', 'images/GoIcon.png'), ('is_valid', 'valid')]),
      OrderedDict([('cue_file', 'images/StopIcon.png'), ('is_valid', 'invalid')]),
      OrderedDict([('cue_file', 'images/StopIcon.png'), ('is_valid', 'invalid')]),
      OrderedDict([('cue_file', 'images/StopIcon.png'), ('is_valid', 'invalid')]),
      OrderedDict([('cue_file', 'images/StopIcon.png'), ('is_valid', 'invalid')]),
      OrderedDict([('cue_file', 'images/GoIcon.png'), ('is_valid', 'valid')]),
      OrderedDict([('cue_file', 'images/StopIcon.png'), ('is_valid', 'invalid')])]
    Routine randomisedBreak
    Routine Trial
  LoopTerminator trials
  Routine End
